;
; Filename: cecd_TOCSY_2H_ipap_600_dfh 
;
; This sequence performs the following experiment
;   CeCd-SQC carbon-carbon correlation for lysine side-chains and
;   CdCg-SQC carbon-carbon correlation for arginine side-chains
;;
; Samples should be U-13C2H labelled
;   If the sample is 15N labelled decoupling of 15N should be carried out
;   in the direct dimension, however, current cold probes cannot do
;   15N decoupling and 2H decoupling during 13C acquisition: D+N=C
;   during acquisition
;
; Set the following parameters
;   O1P    to the average chemical shift of lys(Ce) Arg(Cd) ~ 42 ppm
;   CNST22 to the average chemical shift of lys(Cd) Arg(Cg) ~ 29 ppm
;   CNST2  to scalar 13C-13C coupling (36 Hz)
;   pl17 (deuterium decoupling) to approx 850 Hz
;
; The following selective pulses should be checked
;   - Selective excitation (and time-reverse) of Lys Ce/Arg Cd with 
;     EBurp2 (p14@sp12, p14@sp14)
;   - Selective Lys Ce/Arg Cd refocusing ReBurp (p15@sp16)
;   - Selective Lys Cd/Arg Cg refocusing ReBurp (p15@sp15)
;   - 2H decoupling during indirect evolution and Cd <-> Ce INEPTS 
;     at a power of pl17
;   - 2H flanking pulses p51@pl17
;
;   Written by D. Flemming Hansen on Sep 18th 2013


;$CLASS=HighRes
;$DIM=2D
;$TYPE=
;$SUBTYPE=
;$COMMENT=

#include <Avance.incl>
#include <Delay.incl>
#include <Grad.incl>


"d11=30m"
"d12=15u"
"d13=15u"

define pulse pwc
       "pwc=p1"
       
define pulse pwn
       "pwn=p3"    

define pulse pwc90_sel1
       "pwc90_sel1=p11"

define pulse pwc90_sel2
        "pwc90_sel2=p13"

define pulse pwc180_sel1
       "pwc180_sel1=p15"

define pulse pwc180_sel2
       "pwc180_sel2=p16"

define pulse pwc_dip
       "pwc_dip=p17"

define pulse pwc180_co
       "pwc180_co=p18"

define pulse pwd
       "pwd=p41"

define delay taua
       "taua=1s/(cnst2*4.)"

define delay TC
       "TC=1s/(cnst2*1.)"

define delay flopsytime

"in0=inf1/2"
"d0=0.1u"

"in10=inf2/2"
"d10=0.1u"

define list<loopcounter> ap_flg = {0 1}
define loopcounter maxtd
"l11=0"

"maxtd= 2.*trunc( ( TC*0.5 - pwc - 4u - d12 - d0)/in0)"
"flopsytime=188.448*p17*l1"

"cnst21=o1/bf1"

;hard code zero power
"plw0=0."

;hard code offsets and spoals
"spoal11=1"
"spoffs11=0."

"spoal12=0."
"spoffs12=0."

"spoal13=1."
"spoffs13=0."

"spoal14=0."
"spoffs14=0."

"spoffs15=0."
"spoffs16=(cnst22-cnst21)*bf1/1000000."

"spoffs18=(cnst24-cnst23)*bf1/1000000."

;calculate power levels 
#ifdef AUTOCAL
   "spw11=(pwc/pwc90_sel1)*(pwc/pwc90_sel1)*plw1/(0.05813*0.05813)"
   "spw12=(pwc/pwc90_sel1)*(pwc/pwc90_sel1)*plw1/(0.05813*0.05813)"
   "spw13=(pwc/pwc90_sel2)*(pwc/pwc90_sel2)*plw1/(0.05813*0.05813)"
   "spw14=(pwc/pwc90_sel2)*(pwc/pwc90_sel2)*plw1/(0.05813*0.05813)"
   "spw15=(pwc/pwc180_sel1)*(pwc/pwc180_sel1)*plw1/(0.041920*0.041920)"
   "spw16=(pwc/pwc180_sel2)*(pwc/pwc180_sel2)*plw1/(0.041920*0.041920)"
   "spw18=(pwc/pwc180_co)*(pwc/pwc180_co)*plw1/(0.235*0.235)"
   "plw17=(pwc/pwc_dip)*(pwc/pwc_dip)*plw1"
#endif

;define constants to check power levels
"cnst41=plw41"
"acqt0=0.0"

1 ze
  if "td1>maxtd" 
  {
    20u
    print "ERROR: TD1 too large"
    goto HaltAcqu
  }
  if "flopsytime>25m"
  {
    20u
    print "ERROR: FLOPSY mixing too long"
    goto HaltAcqu
  }
  if "pwc_dip < 32u"
  {
     20u
     print "ERROR: FLOPSY strength too high"
     goto HaltAcqu
  }
  if "pwd<200u"
  {
    20u
    print "ERROR: Deuterium decoupling power too high"
    goto HaltAcqu
  }
  if "cnst41>6.5"
  {
    20u
    print "ERROR: Deuterium decoupling power too high"
    goto HaltAcqu
  }

  d11 LOCKDEC_ON
  50u LOCKH_ON
  d11 H2_PULSE
  d12 pl31:f3 pl41:f4

2 d11 do:f3 do:f4
  d11 H2_LOCK
  d1*0.33
  6m LOCKH_OFF
  d1*0.67
  50u LOCKH_ON
  d12 H2_PULSE

  30u fq=cnst23(bf ppm):f1
  d12 pl42:f4
  30u fq=cnst43(bf ppm):f4

;
; Start deuterium decoupling
  (p42 ph11):f4
  d13
  d13 cpd4:f4 ph2
;
;
  d12 pl1:f1 pl3:f3
  (pwc ph5):f1
  4u
  d12 pl0:f1
  (pwc180_co:sp18 ph10):f1
  4u
  d12 pl1:f1
  d10
  (pwn*2 ph10):f3
  d10
  (pwc*2 ph11):f1
  4u
  d12 pl0:f1
  (pwc180_co:sp18 ph10):f1
  4u
  d12 pl1:f1 pl0:f3
  (pwc ph10):f1
;
; Stop deuterium decoupling
  d13 do:f4
  (p42 ph13):f4
;
;  GRADIENT START
  p53:gp3
  d16
; GRADIENT STOP
;
  d12 pl17:f1
4 p17*0.511 ph26
  p17*1.067 ph27
  p17*1.822 ph28
  p17*1.767 ph29
  p17*1.444 ph30
  p17*1.767 ph29
  p17*1.822 ph28
  p17*1.067 ph27
  p17*0.511 ph26

  p17*0.511 ph21
  p17*1.067 ph22
  p17*1.822 ph23
  p17*1.767 ph24
  p17*1.444 ph25
  p17*1.767 ph24
  p17*1.822 ph23
  p17*1.067 ph22
  p17*0.511 ph21

  p17*0.511 ph21
  p17*1.067 ph22
  p17*1.822 ph23
  p17*1.767 ph24
  p17*1.444 ph25
  p17*1.767 ph24
  p17*1.822 ph23
  p17*1.067 ph22
  p17*0.511 ph21

  p17*0.511 ph26
  p17*1.067 ph27
  p17*1.822 ph28
  p17*1.767 ph29
  p17*1.444 ph30
  p17*1.767 ph29
  p17*1.822 ph28
  p17*1.067 ph27
  p17*0.511 ph26

  p17*0.511 ph26
  p17*1.067 ph27
  p17*1.822 ph28
  p17*1.767 ph29
  p17*1.444 ph30
  p17*1.767 ph29
  p17*1.822 ph28
  p17*1.067 ph27
  p17*0.511 ph26

  p17*0.511 ph26
  p17*1.067 ph27
  p17*1.822 ph28
  p17*1.767 ph29
  p17*1.444 ph30
  p17*1.767 ph29
  p17*1.822 ph28
  p17*1.067 ph27
  p17*0.511 ph26

  p17*0.511 ph21
  p17*1.067 ph22
  p17*1.822 ph23
  p17*1.767 ph24
  p17*1.444 ph25
  p17*1.767 ph24
  p17*1.822 ph23
  p17*1.067 ph22
  p17*0.511 ph21

  p17*0.511 ph21
  p17*1.067 ph22
  p17*1.822 ph23
  p17*1.767 ph24
  p17*1.444 ph25
  p17*1.767 ph24
  p17*1.822 ph23
  p17*1.067 ph22
  p17*0.511 ph21

  p17*0.511 ph21
  p17*1.067 ph22
  p17*1.822 ph23
  p17*1.767 ph24
  p17*1.444 ph25
  p17*1.767 ph24
  p17*1.822 ph23
  p17*1.067 ph22
  p17*0.511 ph21

  p17*0.511 ph26
  p17*1.067 ph27
  p17*1.822 ph28
  p17*1.767 ph29
  p17*1.444 ph30
  p17*1.767 ph29
  p17*1.822 ph28
  p17*1.067 ph27
  p17*0.511 ph26

  p17*0.511 ph26
  p17*1.067 ph27
  p17*1.822 ph28
  p17*1.767 ph29
  p17*1.444 ph30
  p17*1.767 ph29
  p17*1.822 ph28
  p17*1.067 ph27
  p17*0.511 ph26

  p17*0.511 ph21
  p17*1.067 ph22
  p17*1.822 ph23
  p17*1.767 ph24
  p17*1.444 ph25
  p17*1.767 ph24
  p17*1.822 ph23
  p17*1.067 ph22
  p17*0.511 ph21

  p17*0.511 ph21
  p17*1.067 ph22
  p17*1.822 ph23
  p17*1.767 ph24
  p17*1.444 ph25
  p17*1.767 ph24
  p17*1.822 ph23
  p17*1.067 ph22
  p17*0.511 ph21

  p17*0.511 ph21
  p17*1.067 ph22
  p17*1.822 ph23
  p17*1.767 ph24
  p17*1.444 ph25
  p17*1.767 ph24
  p17*1.822 ph23
  p17*1.067 ph22
  p17*0.511 ph21

  p17*0.511 ph26
  p17*1.067 ph27
  p17*1.822 ph28
  p17*1.767 ph29
  p17*1.444 ph30
  p17*1.767 ph29
  p17*1.822 ph28
  p17*1.067 ph27
  p17*0.511 ph26

  p17*0.511 ph26
  p17*1.067 ph27
  p17*1.822 ph28
  p17*1.767 ph29
  p17*1.444 ph30
  p17*1.767 ph29
  p17*1.822 ph28
  p17*1.067 ph27
  p17*0.511 ph26
  lo to 4 times l1

  d12 pl0:f1 pl42:f4
  30u fq=cnst21(bf ppm):f1
  30u fq=0:f4
  50u UNBLKGRAMP
;
; Start deuterium decoupling
  (p42 ph11):f4
  d13
  d13 cw:f4 ph2
;
  (pwc90_sel1:sp11 ph1):f1
  4u
  d12 pl1:f1
  "DELTA=taua-4u-d12-pwc"
  DELTA
  (pwc*2 ph10):f1
  "DELTA=taua-4u-d12-pwc"
  DELTA
  d12 pl0:f1
  4u
  (pwc90_sel1:sp12 ph11):f1
;
; Stop deuterium decoupling
  d13 do:f4
  (p42 ph13):f4
;
  30u fq=cnst22(bf ppm):f1
  d12 pl0:f1 
;  GRADIENT START
  p51:gp1
  d16
; GRADIENT STOP
;
; Start deuterium decoupling
  30u fq=cnst42(bf ppm):f4

  (p42 ph11):f4
  d13
  d13 cw:f4 ph2

;
; Start constant-time evolution
  (pwc90_sel2:sp13 ph4):f1
#if !defined(TOCSYPLANE)
  4u
  d12 pl1:f1
  "DELTA=TC*0.5+d0-4u-d12-pwc"
  DELTA
  (pwc*2 ph2):f1  
  d12 pl0:f1
  "DELTA=TC*0.5-d0-d12-pwc"
  DELTA
#else
  4u
#endif
  (pwc90_sel2:sp14 ph2):f1
; End constant-time evolution
; Stop deuterium decoupling
  d13 do:f4
  (p42 ph13):f4
  d12
;
;
; GRADIENT START
  p52:gp2
  d16
; GRADIENT STOP
  30u fq=cnst21(bf ppm):f1 pl0:f1
  30u fq=0:f4
  d12 pl41:f4
  d13 BLKGRAMP
;
; Start deuterium decoupling (this will be kept on during acq)
  (p41 ph11):f4
  d13
  d13 cw:f4 ph2
;
  if "ap_flg[l11]>0" {
    (pwc90_sel1:sp11 ph13):f1
    4u
    d12 pl0:f1
    "DELTA=taua-4u-d12"
    DELTA
    (pwc180_sel2:sp16 ph2):f1
    4u
    (pwc180_sel1:sp15 ph2):f1
    4u
    (pwc180_sel2:sp16 ph2):f1
    "DELTA=taua"
    DELTA
  } else {
    (pwc90_sel1:sp11 ph10):f1
    4u
    d12 pl0:f1
    "DELTA=taua-4u-d12"
    DELTA
    (pwc180_sel2:sp16 ph2):f1
    4u
    (pwc180_sel1:sp15 ph2):f1
    4u
    "DELTA=taua"
    DELTA
    (pwc180_sel2:sp16 ph2):f1
  }

;
; ACQUISITION
;  go=2 ph31 cpd3:f3
  go=2 ph31 
  d11 do:f3 do:f4 mc #0 to 2
;      F3QF(calclist(ap_flg,1)) 
      F3QF(calclc(l11,1))
      F2PH(calph(ph5,+90),caldel(d10,+in10))
      F1PH(calph(ph4,+90),caldel(d0,+in0))

  d11 H2_LOCK
  d11 LOCKH_OFF
  d11 LOCKDEC_OFF

;so we can loop to the end.. 
HaltAcqu, 1m
stop, exit

ph1= 0 0 2 2 
ph2= 0
ph4= 0 2
ph5= 2 

ph10=0
ph11=1
ph12=2
ph13=3
;
;FLOPSY pulses
ph26=(720) 0
ph27=(720) 90
ph28=(720) 135
ph29=(720) 630
ph30=(720) 45

ph21=(720) 360
ph22=(720) 450
ph23=(720) 495
ph24=(720) 270
ph25=(720) 405
;
;receiver pulse
ph31=0 2 2 0 


;p1: pwc
;p41: pwd
;p11: pwc90_sel1   90 degree shaped pulse for Ce
;p13: pwc90_sel2   90 degree shaped pulse for Cd
;p15: pwc180_sel1 180 degree shaped pulse for Ce
;p16: pwc180_sel2 180 degree shaped pulse for Cd
;p17: pwc_dip
;pwc90_sel1: 90 degree shaped pulse for Ce
;pwc90_sel2: 90 degree shaped pulse for Ce
;plw0: Zero power [0W]
;pl1: High power 13C [135W]
;cnst2: = J(CC)  [37 Hz]
;cnst21: C_e (lys) chemical shift offset       [=o1p, 40 ppm]
;cnst22: C_d (lys) chemical shift offset       [32.0 ppm]
;cnst23: Middle of aliphatic region            [30 ppm]
;sp11:   90 degree shaped pulse for Ce [Eburp2.1000]
;spnam11: Eburp2.1000
;sp12:   90 time-reversed shaped pulse [Eburp2tr.1000]
;spnam12: Eburp2tr.1000
;sp13:   90 degree shaped pulse for Cd [Eburp2.1000]
;spnam13: Eburp2.1000
;sp14:   90 time-reversed shaped pulse [Eburp2tr.1000]
;spnam14: Eburp2tr.1000
;sp15:  180 inversion pulse for Ce     [Reburp.1000]
;spnam15: Reburp.1000
;sp16:  180 inversion pulse for Cd     [Reburp.1000]
;spnam16: Reburp.1000
;sp18: 180 inversion pulse for CO      [Seduce.100]
;spnam18: Seduce.100
;o1p: C_epsilon chemical shift offset          [40 ppm]
;o2p: H_e/H_d chemical shift offset            [4 ppm]
;o3p: N_e chemical shift offset                [35.0 ppm]
;o4p: H_e/H_d chemical shift offset            [4. ppm]
;d16: delay for homospoil/gradient recovery    [200u]
;inf1: 1/SW(X) = 2 * DW(X)
;in0: 1/(2 * SW(X)) = DW(X)
;nd0: 2
;NS: 4 * n
;DS: 32
;l1: Number of FLOPSY loops (Check flopsytime)
;ap_flg: Flag for selecting in-phase or anti-phase
;td1: number of experiments
;FnMODE: States-TPPI, TPPI, States or QSEQ
;cpd3:   decoupling according to sequence defined by cpdprg3: wlatz16
;p62:    f3 channel - 90 degree pulse for decoupling sequence [350 us]
;cpd4:   decoupling according to sequence defined by cpdprg4
;pcpd4:  f4 channel - 90 degree pulse for decoupling sequence [250u]

;for z-only gradients:
;gpz1: 7 %
;gpz2: 17 %
;gpz3: 33 %
;gpz4: 13 %

;use gradient files:
;gpnam1: SINE.100
;gpnam2: SINE.100

;preprocessor-flags-start


