;
; Filename: cecd_2d_lys_2H_ipap.dfh 
;
; This sequence performs the following experiment
;   CeCd-SQC carbon-carbon correlation for lysine side-chains and
;   CdCg-SQC carbon-carbon correlation for arginine side-chains
;;
; Samples should be U-13C2H labelled
;   If the sample is 15N labelled decoupling of 15N should be carried out
;   in the direct dimension, however, current cold probes cannot do
;   15N decoupling and 2H decoupling during 13C acquisition: D+N=C
;   during acquisition
;
; Set the following parameters
;   O1P    to the average chemical shift of lys(Ce) Arg(Cd) ~ 42 ppm
;   CNST22 to the average chemical shift of lys(Cd) Arg(Cg) ~ 29 ppm
;   CNST2  to scalar 13C-13C coupling (36 Hz)
;   pl17 (deuterium decoupling) to approx 850 Hz
;
; The following selective pulses should be checked
;   - Selective excitation (and time-reverse) of Lys Ce/Arg Cd with 
;     EBurp2 (p14@sp12, p14@sp14)
;   - Selective Lys Ce/Arg Cd refocusing ReBurp (p15@sp16)
;   - Selective Lys Cd/Arg Cg refocusing ReBurp (p15@sp15)
;   - 2H decoupling during indirect evolution and Cd <-> Ce INEPTS 
;     at a power of pl17
;   - 2H flanking pulses p51@pl17
;
;   Written by D. Flemming Hansen on Sep 18th 2013


;$CLASS=HighRes
;$DIM=2D
;$TYPE=
;$SUBTYPE=
;$COMMENT=

#include <Avance.incl>
#include <Delay.incl>
#include <Grad.incl>


"d11=30m"
"d12=2u"
"d13=2u"

define pulse pwc
       "pwc=p1"

define pulse pwc90_sel1
       "pwc90_sel1=p11"

define pulse pwc90_sel2
        "pwc90_sel2=p13"

define pulse pwc180_sel1
       "pwc180_sel1=p15"

define pulse pwc180_sel2
       "pwc180_sel2=p16"

define pulse pwc_cest
       "pwc_cest=p17"

define pulse pwd
       "pwd=p41"

define delay taua
       "taua=1s/(cnst2*4.)"

define delay TC
       "TC=1s/(cnst2*1.)"

"in0=inf1/2"
#ifdef CT
  "d0=0.1u"
#else
  "d0=in0/2.-0.6366*pwc-d12"
#endif

define list<loopcounter> ap_flg = {0 1}
"l11=0"

define loopcounter maxtd
"maxtd= 2.*trunc( ( TC*0.5 - pwc - d12 - d0)/in0)"

define list<frequency> C13sat = <$FQ1LIST>

"cnst21=o1/bf1"

;hard code zero power
"plw0=0."

;hard code offsets and spoals
"spoal11=1"
"spoffs11=0."

"spoal12=0."
"spoffs12=0."

"spoal13=1."
"spoffs13=0."

"spoal14=0."
"spoffs14=0."

"spoffs15=0."
"spoffs16=(cnst22-cnst21)*bf1/1000000."

;calculate power levels 
#ifdef AUTOCAL
   "spw11=(pwc/pwc90_sel1)*(pwc/pwc90_sel1)*plw1/(0.05813*0.05813)"
   "spw12=(pwc/pwc90_sel1)*(pwc/pwc90_sel1)*plw1/(0.05813*0.05813)"
   "spw13=(pwc/pwc90_sel2)*(pwc/pwc90_sel2)*plw1/(0.05813*0.05813)"
   "spw14=(pwc/pwc90_sel2)*(pwc/pwc90_sel2)*plw1/(0.05813*0.05813)"
   "spw15=(pwc/pwc180_sel1)*(pwc/pwc180_sel1)*plw1/(0.041920*0.041920)"
   "spw16=(pwc/pwc180_sel2)*(pwc/pwc180_sel2)*plw1/(0.041920*0.041920)"
;   "plw17=(pwc/pwc_cest)*(pwc/pwc_cest)*plw1"
#endif


;define constants to check power levels
"cnst41=plw41"
"cnst42=plw42"
"acqt0=0.1u"

1 ze
  if "td1>maxtd" 
  {
    20u
    print "ERROR: TD1 too large"
    goto HaltAcqu
  }
  if "pwc_cest < 1000u"
  {
     20u
     print "ERROR: CEST strength too high"
     goto HaltAcqu
  }
  if "pwd<200u"
  {
    20u
    print "ERROR: Deuterium decoupling power too high"
    goto HaltAcqu
  }
  if "cnst41>6.5"
  {
    20u
    print "ERROR: Deuterium decoupling power too high"
    goto HaltAcqu
  }
  if "cnst42>2.5"
  {
    20u
    print "ERROR: Deuterium decoupling power too high"
    goto HaltAcqu
  }


  d11 LOCKDEC_ON
  50u LOCKH_ON
  d11 H2_PULSE
  d12 pl41:f4
2 d11 do:f3 do:f4
  d11 H2_LOCK
;
; wait for the lock to stabilise before starting to lock
  d1*0.33
  6m LOCKH_OFF
  d1*0.67
  50u LOCKH_ON
  d12 H2_PULSE
  30u fq=0:f4

  (pwc90_sel1:sp11 ph10):f1
  4u
  (pwc90_sel1:sp12 ph1):f1
  4u

; BEGIN - CEST 
  if "abs(C13sat)>10000Hz" {
    d12 pl0:f1
  } else {
    d12 pl17:f1 pl42:f4
  }
  30u fq=C13sat:f1
  d12 cw:f1 cpd5:f4
  if "abs(C13sat)>10000Hz" {
    d12 
  } else {
    d17
  }  
  d12 do:f1 do:f4
  30u fq=cnst21(bf ppm):f1

; END - CEST

  d12 pl0:f1 pl41:f4
  30u fq=cnst21(bf ppm):f1
  50u UNBLKGRAMP
  30u fq=0:f4

;  GRADIENT START
  p51:gp1
  d16
;  GRADIENT STOP

;
; Start deuterium decoupling
  (p41 ph11):f4
  d13
  d13 cpd4:f4 ph2
;
  (pwc90_sel1:sp11 ph10):f1
  4u
  d12 pl1:f1
  "DELTA=taua-4u-d12-pwc"
  DELTA
  (pwc*2 ph10):f1
  "DELTA=taua-4u-d12-pwc"
  DELTA
  d12 pl0:f1
  4u
  (pwc90_sel1:sp12 ph11):f1
;
; Stop deuterium decoupling
  d13 do:f4
  (p41 ph13):f4
;
  30u fq=cnst22(bf ppm):f1
  d12 pl0:f1
;  GRADIENT START
  p52:gp2
  d16
; GRADIENT STOP
;
; Start deuterium decoupling
  30u fq=cnst43(bf ppm):f4
  (p41 ph11):f4
  d13
  d13 cpd4:f4 ph2
;
; Chemical shift evolution
  (pwc90_sel2:sp13 ph4):f1
#ifdef CT
;
; Start constant-time evolution
  4u
  d12 pl1:f1
  "DELTA=TC*0.5+d0-4u-d12-pwc"
  DELTA
  (pwc*2 ph2):f1  
  4u
  d12 pl0:f1
  "DELTA=TC*0.5-d0-4u-d12-pwc"
  DELTA
#else
;
; Start non-constant-time evolution
  4u
  d12 pl0:f1
  d0
  d0
  d12 pl0:f1
  4u
#endif
  (pwc90_sel2:sp14 ph2):f1
; End constant-time evolution
; Stop deuterium decoupling
  d13 do:f4
  (p41 ph13):f4
  d12
;
;
; GRADIENT START
  p53:gp3
  d16
; GRADIENT STOP
  30u fq=cnst21(bf ppm):f1 pl0:f1
  d13 BLKGRAMP
;
; Start deuterium decoupling (this will be kept on during acq)
  30u fq=0:f4
  (p41 ph11):f4
  d13
  d13 cpd4:f4 ph2
;
  if "ap_flg[l11]>0" {
    (pwc90_sel1:sp11 ph13):f1
    4u
    d12 pl0:f1
    "DELTA=taua-4u-d12"
    DELTA
    (pwc180_sel2:sp16 ph2):f1
    4u
    (pwc180_sel1:sp15 ph2):f1
    4u
    (pwc180_sel2:sp16 ph2):f1
    "DELTA=taua-d12-4u"
    DELTA
  } else {
    (pwc90_sel1:sp11 ph10):f1
    4u
    d12 pl0:f1
    "DELTA=taua-4u-d12"
    DELTA
    (pwc180_sel2:sp16 ph2):f1
    4u
    (pwc180_sel1:sp15 ph2):f1
    4u
    "DELTA=taua-d12-4u"
    DELTA
    (pwc180_sel2:sp16 ph2):f1
  }
  4u
  d12 pl0:f1 pl31:f3

;
; ACQUISITION
  go=2 ph31 
  d11 do:f3 do:f4 mc #0 to 2
	F3QF(calclc(l11,1))
	F2QF(calclist(C13sat,1))
	F1PH(calph(ph4,+90),caldel(d0,+in0))

  d11 H2_LOCK
  d11 LOCKH_OFF
  d11 LOCKDEC_OFF

;so we can loop to the end.. 
HaltAcqu, 1m
stop, exit

ph1= 0 0 2 2 
ph2= 0
ph4= 0 2

ph10=0
ph11=1
ph12=2
ph13=3
;
;FLOPSY pulses
ph26=(720) 0
ph27=(720) 90
ph28=(720) 135
ph29=(720) 630
ph30=(720) 45

ph21=(720) 360
ph22=(720) 450
ph23=(720) 495
ph24=(720) 270
ph25=(720) 405
;
;receiver pulse
ph31=0 2 2 0


;p1: pwc
;p41: pwd
;p11: pwc90_sel1   90 degree shaped pulse for Ce
;p13: pwc90_sel2   90 degree shaped pulse for Cd
;p15: pwc180_sel1 180 degree shaped pulse for Ce
;p16: pwc180_sel2 180 degree shaped pulse for Cd
;p17: pwc_dip
;pwc90_sel1: 90 degree shaped pulse for Ce
;pwc90_sel2: 90 degree shaped pulse for Ce
;plw0: Zero power [0W]
;pl1: High power 13C [135W]
;pl4: High power 2H  [14W]
;pl41: 2H decoupling [4W]
;pl42: 2H decoupling during CEST [<0.4W]
;pl17: 13C CEST saturation power               [<1e-4W]
;cnst2: = J(CC)                                [37 Hz]
;cnst21: C_e (lys) chemical shift offset       [=o1p, 40 ppm]
;cnst22: C_d (lys) chemical shift offset       [32.0 ppm]
;sp11:   90 degree shaped pulse for Ce [Eburp2.1000]
;spnam11: Eburp2.1000
;sp12:   90 time-reversed shaped pulse [Eburp2tr.1000]
;spnam12: Eburp2tr.1000
;sp13:   90 degree shaped pulse for Cd [Eburp2.1000]
;sp14:   90 time-reversed shaped pulse [Eburp2tr.1000]
;sp15:  180 inversion pulse for Ce     [Reburp.1000]
;sp16:  180 inversion pulse for Cd     [Reburp.1000]
;o1p: C_epsilon chemical shift offset          [40 ppm]
;o2p: H_e/H_d chemical shift offset            [4 ppm]
;o3p: N_e chemical shift offset                [35.0 ppm]
;o4p: H_e/H_d chemical shift offset            [4. ppm]
;d16: delay for homospoil/gradient recovery    [200u]
;inf1: 1/SW(X) = 2 * DW(X)
;in0: 1/(2 * SW(X)) = DW(X)
;nd0: 2
;NS: 4 * n
;DS: > 32
;ap_flg: Flag for selecting in-phase or anti-phase
;td1: number of experiments
;FnMODE: States-TPPI, TPPI, States or QSEQ
;cpd3:   decoupling according to sequence defined by cpdprg3: wlatz16
;cpd4:   decoupling according to sequence defined by cpdprg4
;pcpd4:  f4 channel - 90 degree pulse for decoupling sequence [250u]

;for z-only gradients:
;gpz1: 7 %
;gpz2: 17 %
;gpz3: 33 %
;gpz4: 13 %

;use gradient files:
;gpnam1: SINE.100
;gpnam2: SINE.100
;gpnam3: SINE.100

;preprocessor-flags-start


